<CompuCell3D>

    <Potts>
        <Dimensions x="100" y="100" z="1"/>
        <Steps>1000</Steps>
        <Temperature id="temp">10.0</Temperature>
        <NeighborOrder>1</NeighborOrder>
    </Potts>

    <Plugin Name="CellType">
        <CellType TypeId="0" TypeName="Medium"/>
        <CellType TypeId="1" TypeName="Condensing"/>
        <CellType TypeId="2" TypeName="NonCondensing"/>
    </Plugin>

    <Plugin Name="Volume">
        <VolumeEnergyParameters id="vol_cond" CellType="Condensing" LambdaVolume="2.0" TargetVolume="25"/>
        <VolumeEnergyParameters CellType="NonCondensing" LambdaVolume="2.0" TargetVolume="25"/>
    </Plugin>

    <Plugin Name="CenterOfMass"/>

    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">10.0</Energy>
        <Energy Type1="Medium" Type2="Condensing">10.0</Energy>
        <Energy Type1="Medium" Type2="NonCondensing">10.0</Energy>
        <Energy Type1="Condensing" Type2="Condensing">10.0</Energy>
        <Energy Type1="Condensing" Type2="NonCondensing">10.0</Energy>
        <Energy Type1="NonCondensing" Type2="NonCondensing">10.0</Energy>
        <NeighborOrder>1</NeighborOrder>
    </Plugin>

    <Steppable Type="BlobInitializer">
        <Region>
            <Center x="50" y="50" z="0"/>
            <Radius>20</Radius>
            <Gap>0</Gap>
            <Width>5</Width>
            <Types>Condensing,NonCondensing</Types>
        </Region>
    </Steppable>
</CompuCell3D>
